OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  World Tour System Training Session

  Code to perform an training session.

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Channel Selector "1:7" => #1
  Channel List = 1:7
  Action = Select
  Channel Matching Method = Smart
Input Signal=#1, Input Stimulations=#0.Stimulations -> Generic stream writer "Rawdata Acquisition"
  Filename = C:/Users/user/Desktop/Drone/LDA/Training/Training-[$core{date}-$core{time}].ov
  Use compression = false
Data=#1, Stimulations=#0.Stimulations -> Signal display "Raw data"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
New input=#1, New input(1)=#0.Stimulations -> OnlineSession
  Clock frequency (Hz) = 1
  Script = C:/Users/user/Desktop/Drone/LDA/SourceCode/DroneOnlineLDA.py
#0.Stimulations -> Player Controller "Stop Trigger"
  Stimulation name = OVTK_StimulationId_Number_09
  Action to perform = Stop
